PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = solo
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent ProfileText
      letterHeight = 0.05
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $profile_text
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 1
      labels = "Not Intelligent", "Highly Intelligent"
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 5.0
      styles = slider
      ticks = (1, 2, 3, 4, 5, 6, 7)
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Flow
  LoopInitiator ProfileLoop loopType="TrialHandler"
    conditionsFile = profile_text - Sheet1 (1).csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('profile_text', 'Alex, 40, CEO of successful tech company'), ('Status', 'High')]),
      OrderedDict([('profile_text', 'Jordan, 36, Neurosurgeon at a leading hospital'), ('Status', 'High')]),
      OrderedDict([('profile_text', 'Taylor, 45, Founder of a non-profit organization'), ('Status', 'High')]),
      OrderedDict([('profile_text', 'Riley, 50, Professor of Astrophysics at a top university'), ('Status', 'High')]),
      OrderedDict([('profile_text', 'Morgan, 38, Managing Director of an investment firm'), ('Status', 'High')]),
      OrderedDict([('profile_text', 'Jamie, 29, Regional Manager at a retail store'), ('Status', 'Medium')]),
      OrderedDict([('profile_text', 'Casey, 35, Accountant at a small financial firm'), ('Status', 'Medium')]),
      OrderedDict([('profile_text', 'Robin, 32, Sales Supervisor in a local electronics store'), ('Status', 'Medium')]),
      OrderedDict([('profile_text', 'Avery, 40, School Teacher in a primary school'), ('Status', 'Medium')]),
      OrderedDict([('profile_text', 'Quinn, 28, Assisstant Manager at a coffee chain'), ('Status', 'Medium')]),
      OrderedDict([('profile_text', 'Chris, 26, Part-time Cashier at a grocery store'), ('Status', 'Low')]),
      OrderedDict([('profile_text', 'Sam, 22, Delivery driver for a food service'), ('Status', 'Low')]),
      OrderedDict([('profile_text', 'Damon, 30, Cleaner at a local office building'), ('Status', 'Low')]),
      OrderedDict([('profile_text', 'Noah, 35, Janitor at a high school'), ('Status', 'Low')])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
    Routine trial
  LoopTerminator ProfileLoop
